---
API: 2.1
OpenSesame: 3.3.11a1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/julian/Documents/University/MSc Artificial Intelligence/Year 3/Block Ia/User Models/AbsolutePitch-Slimstampen"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define form_text_display Feedback
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Feedback
	set form_text "You were incorrect. The correct answer was [second_note_interval_from_first_note] semitones.semitones"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script Import_SlimStampen
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Instructions
	set form_text "You will hear two notes. Please respond with the number of semitones between them (1 to 12)"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script Learning_Session_Setup
	set description "Executes Python code"
	___run__
	# Start the clock
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.time_up = False
	
	# Keep track of trial number
	var.trial_num = 1
	
	# Settings
	var.session_duration = 100000
	var.feedback_duration = 800
	var.inter_trial_interval = 200
	__end__
	set _prepare ""

define form_text_display Notes_Text
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Notes_Text
	set form_text "Listen to the notes [first_note_hz] [second_note_hz] [second_note_interval_from_first_note]"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script Obtain_Item
	set description "Executes Python code"
	___run__
	trial_start_time = clock.time()
	
	next_fact, new = m.get_next_fact(current_time = trial_start_time)
	first_note_hz, second_note_hz = next_fact.question
	second_note_interval_from_first_note = next_fact.answer
	__end__
	set _prepare ""

define inline_script Read_Items
	set description "Executes Python code"
	___run__
	from slimstampen.spacingmodel import SpacingModel, Fact
	
	def add_items(slimstampenmodel, filename, splitter):
	    with open(filename) as f:
	        lines = f.readlines()
	        
	        for i, line in enumerate(lines[1:]):
	            cells = line.split(splitter)
	            m.add_fact(Fact(i, (cells[2], cells[3]), cells[1]))
	
	m = SpacingModel()
	add_items(m, 'opensesamestuff.csv', ',')
	__end__
	set _prepare ""

define form_text_input Response
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title Response
	set form_question "Please type a number in [1, 12] and press Enter"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_display Response_Text
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Response_Text
	set form_text "Please type a number in [1, 12] and press Enter"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script SS_Register_Response
	set description "Executes Python code"
	___run__
	rt = clock.time() - time_second_note
	correct = (response == second_note_interval_from_first_note)
	ss_response = Response(next_fact, trial_start_time, rt, correct)
	m.register_response(ss_response) 
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Read_Items always
	run Learning_Session_Setup always
	run Instructions always
	run present_items always

define reset_feedback feedback_reset
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define synth first_note
	set volume 1
	set pan 0
	set osc sine
	set length 1000
	set freq "[first_note_hz]"
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sequence item
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Obtain_Item always
	run Notes_Text always
	run first_note always
	run second_note always
	run Response always
	run SS_Register_Response always
	run Feedback "[response] != [second_note_interval_from_first_note]"
	run log_data always

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger log_data
	set description "Logs experimental data"
	set auto_log yes

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"

define loop present_items
	set source_file "opensesamestuff.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 144
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 first_note_interval_from_A4 0
	setcycle 0 second_note_interval_from_first_note 1
	setcycle 0 first_note_hz 440
	setcycle 0 second_note_hz 466
	setcycle 1 first_note_interval_from_A4 1
	setcycle 1 second_note_interval_from_first_note 1
	setcycle 1 first_note_hz 466
	setcycle 1 second_note_hz 494
	setcycle 2 first_note_interval_from_A4 2
	setcycle 2 second_note_interval_from_first_note 1
	setcycle 2 first_note_hz 494
	setcycle 2 second_note_hz 523
	setcycle 3 first_note_interval_from_A4 3
	setcycle 3 second_note_interval_from_first_note 1
	setcycle 3 first_note_hz 523
	setcycle 3 second_note_hz 554
	setcycle 4 first_note_interval_from_A4 4
	setcycle 4 second_note_interval_from_first_note 1
	setcycle 4 first_note_hz 554
	setcycle 4 second_note_hz 587
	setcycle 5 first_note_interval_from_A4 5
	setcycle 5 second_note_interval_from_first_note 1
	setcycle 5 first_note_hz 587
	setcycle 5 second_note_hz 622
	setcycle 6 first_note_interval_from_A4 6
	setcycle 6 second_note_interval_from_first_note 1
	setcycle 6 first_note_hz 622
	setcycle 6 second_note_hz 659
	setcycle 7 first_note_interval_from_A4 7
	setcycle 7 second_note_interval_from_first_note 1
	setcycle 7 first_note_hz 659
	setcycle 7 second_note_hz 698
	setcycle 8 first_note_interval_from_A4 8
	setcycle 8 second_note_interval_from_first_note 1
	setcycle 8 first_note_hz 698
	setcycle 8 second_note_hz 740
	setcycle 9 first_note_interval_from_A4 9
	setcycle 9 second_note_interval_from_first_note 1
	setcycle 9 first_note_hz 740
	setcycle 9 second_note_hz 784
	setcycle 10 first_note_interval_from_A4 10
	setcycle 10 second_note_interval_from_first_note 1
	setcycle 10 first_note_hz 784
	setcycle 10 second_note_hz 831
	setcycle 11 first_note_interval_from_A4 11
	setcycle 11 second_note_interval_from_first_note 1
	setcycle 11 first_note_hz 831
	setcycle 11 second_note_hz 880
	setcycle 12 first_note_interval_from_A4 0
	setcycle 12 second_note_interval_from_first_note 2
	setcycle 12 first_note_hz 440
	setcycle 12 second_note_hz 494
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	run item

define synth second_note
	set volume 1
	set pan 0
	set osc sine
	set length 1000
	set freq "[second_note_hz]"
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 500

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

